PsychoPy2experiment version="3.1.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1280, 800]
  expName = videoStimTEST
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Routines
  Routine trial
    MovieComponent presentBaby_PL
      backend = moviepy
      forceEndRoutine = False
      movie = baby_PL_copy.mp4
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 5
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    TextComponent fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = +
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    TextComponent presentTarget
      letterHeight = 0.1
      startVal [time (s)] = 7.0
      stopVal [duration (s)] = 5.0
      text = bl_nket
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    KeyboardComponent key_resp
      allowedKeys = 'a','e','i','o','u'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 7.0
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  Routine practInstruct
    TextComponent instr1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Hello!
        You will hear two words followed by a word missing a letter. You decide which missing letter completes the word.

        Example:
        the cats r_n
        the cats run

        Try to respond as quickly and as accurately as possible. To make things easier the answer will always be: a, e, i, o or u.

        When you are ready press any key to start.
    KeyboardComponent OK1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedback
    CodeComponent message
      Code Type = Py
      Begin Experiment:
        #msg variable needs some value at start
        msg = ''
    TextComponent feedback_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = $msg
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  Routine thankyou
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Thank you for your help!
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Flow
  Routine practInstruct
  Routine trial
  Routine feedback
  Routine thankyou
